CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:26
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does startwith "C1") (file does contain "dualstain")
    Name to assign these images:TCR
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does startwith "C3") (file does contain "dualstain")
    Name to assign these images:Lipids
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does startwith "C4") (file does contain "dualstain")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Select the input image:DAPI
    Name the output image:DAPI_RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:6|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
    Select the input image:Lipids
    Name the output image:Lipids_RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:7|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
    Select the input image:TCR
    Name the output image:TCR_RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
GaussianFilter:[module_num:8|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
    Select the input image:DAPI_RescaleIntensity
    Name the output image:DAPI_GaussianFilter
    Sigma:2

GaussianFilter:[module_num:9|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
    Select the input image:Lipids_RescaleIntensity
    Name the output image:Lipids_GaussianFilter
    Sigma:1

IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:DAPI_GaussianFilter
    Name the primary objects to be identified:DAPI_IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):70,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:11|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
    Select the input objects:DAPI_IdentifyPrimaryObjects
    Name the objects to be identified:Lipids_IdentifySecondaryObjects
    Select the method to identify the secondary objects:Propagation
    Select the input image:Lipids_GaussianFilter
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:DAPI_FilteredNuclei
    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MaskImage:[module_num:12|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
    Select the input image:TCR_RescaleIntensity
    Name the output image:TRC_Mask
    Use objects or an image as a mask?:Objects
    Select object for mask:Lipids_IdentifySecondaryObjects
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:13|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
    Select the input image:TRC_Mask
    Name the primary objects to be identified:TRC_IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):4,20
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.7
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MeasureObjectIntensityDistribution:[module_num:14|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
    Select images to measure:Lipids
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:Magnitudes and phase
    Maximum zernike moment:9
    Select objects to measure:Lipids_IdentifySecondaryObjects
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectIntensityDistribution:[module_num:15|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
    Select images to measure:TCR
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:Magnitudes and phase
    Maximum zernike moment:9
    Select objects to measure:Lipids_IdentifySecondaryObjects
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectIntensity:[module_num:16|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
    Select images to measure:Lipids
    Select objects to measure:Lipids_IdentifySecondaryObjects

MeasureObjectIntensity:[module_num:17|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
    Select images to measure:TCR
    Select objects to measure:TRC_IdentifyPrimaryObjects

RelateObjects:[module_num:18|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
    Parent objects:Lipids_IdentifySecondaryObjects
    Child objects:TRC_IdentifyPrimaryObjects
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:No
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
MeasureTexture:[module_num:19|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
    Select images to measure:Lipids
    Select objects to measure:Lipids_IdentifySecondaryObjects
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:3

MeasureTexture:[module_num:20|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
    Select images to measure:TCR
    Select objects to measure:Lipids_IdentifySecondaryObjects
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:3

MeasureObjectSizeShape:[module_num:21|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
    Select object sets to measure:Lipids_IdentifySecondaryObjects, TRC_IdentifyPrimaryObjects
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ConvertObjectsToImage:[module_num:22|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enabled:False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
    Select the input objects:Lipids_IdentifySecondaryObjects
    Name the output image:Lipids_CellImage
    Select the color format:Grayscale
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
ConvertObjectsToImage:[module_num:23|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enabled:False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
    Select the input objects:TRC_IdentifyPrimaryObjects
    Name the output image:TRC_CellImage
    Select the color format:Grayscale
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
SaveImages:[module_num:24|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:Lipids_CellImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:Lipids
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Objects
    Saved file format:tiff
    Output file location:Same folder as image|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:25|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:TRC_CellImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:TCR
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Objects
    Saved file format:tiff
    Output file location:Same folder as image|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:26|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|\\\\pn.vai.org\\projects\\rjones\\primary\\vari-core-generated-data\\OIC\\TCell_Pilot_Cell_Profiler_Results\\Second_Batch
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Joe_Longo_TCR_Pilot_Batch_2_
    Overwrite existing files without warning?:Yes
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